
#================ Flat-penel detector ================
s:Ge/CBCTImager/Type     = "FlatImager"
s:Ge/CBCTImager/Material = "Vacuum"
s:Ge/CBCTImager/Parent   = "World"
d:Ge/CBCTImager/TransZ   = -500 mm
d:Ge/CBCTImager/HLX      = Ge/CBCTImager/Crystal/SizeTotalGap mm * Ge/CBCTImager/Crystal/NbOfXBins
d:Ge/CBCTImager/HLY      = Ge/CBCTImager/Crystal/SizeTotalGap mm * Ge/CBCTImager/Crystal/NbOfYBins
d:Ge/CBCTImager/HLZ      = Ge/CBCTImager/Crystal/HL mm * Ge/CBCTImager/Crystal/NbOfZBins

#================ Crystal scintillator ================
s:Ge/CBCTImager/Crystal/Material           = "CsI"
s:Ge/CBCTImager/Crystal/Shape              = "Cylinder"
d:Ge/CBCTImager/Crystal/HL                 = 18 mm
d:Ge/CBCTImager/Crystal/Radius             = 9.0 mm
# d:Ge/CBCTImager/Crystal/HLX                = 9.0 mm
# d:Ge/CBCTImager/Crystal/HLY                = 9.0 mm
# d:Ge/CBCTImager/Crystal/HLZ                = 18 mm
d:Ge/CBCTImager/Crystal/ReflectorThickenss = 1.2 mm
s:Ge/CBCTImager/Crystal/ReflectorMaterial  = "SiO2"
i:Ge/CBCTImager/Crystal/NbOfXBins          = 21
i:Ge/CBCTImager/Crystal/NbOfYBins          = 21
i:Ge/CBCTImager/Crystal/NbOfZBins          = 1
d:Ge/CBCTImager/Crystal/XGap               = 0 mm
d:Ge/CBCTImager/Crystal/ZGap               = 0 mm
d:Ge/CBCTImager/Crystal/SizeTotal          = Ge/CBCTImager/Crystal/Radius + Ge/CBCTImager/Crystal/ReflectorThickenss mm
d:Ge/CBCTImager/Crystal/SizeTotalGap       = Ge/CBCTImager/Crystal/SizeTotal + Ge/CBCTImager/Crystal/XGap mm

#================ Prefilter ================
sv:Ge/CBCTImager/Prefilters/Materials   = 1 "Carbon"
dv:Ge/CBCTImager/Prefilters/Thicknesses = 1 50 um

#================ Anti-scatter grid ================
b:Ge/CBCTImager/Collimator/Exists                    = "False"
s:Ge/CBCTImager/Collimator/Material                  = "G4_W"
s:Ge/CBCTImager/Collimator/OpeningMaterial           = "Air"
d:Ge/CBCTImager/Collimator/HL                        = 10 mm
u:Ge/CBCTImager/Collimator/XSeptaThicknessPercentage = 0.2
u:Ge/CBCTImager/Collimator/ZSeptaThicknessPercentage = 0.2

#================ Photodetector ================
s:Ge/CBCTImager/PhotoDetector/Type      = "TsBox"
d:Ge/CBCTImager/PhotoDetector/HLZ       = 180 um
s:Ge/CBCTImager/PhotoDetector/Material  = "SiO2" 
