includeFile = OSF_geometry.txt

i:Ts/Seed = 1 # default is 1

s:Sc/Ascorer4/Quantity="SurfaceTrackCount"
s:Sc/Ascorer4/Component = "AMFPI"
s:Sc/Ascorer4/Surface="AMFPI/ZPlusSurface"
sv:Sc/Ascorer4/OnlyIncludeParticlesNamed = 1 "opticalphoton"
s:Sc/Ascorer4/OutputType = "binary"
b:Sc/Ascorer4/OutputToConsole= "False"
s:Sc/Ascorer4/IfOutputFileAlreadyExists="Overwrite"
i:Sc/Ascorer4/XBins    = 11 #10
i:Sc/Ascorer4/YBins    = 11 #10

s:Sc/Ascorer5/Quantity="SurfaceTrackCount"
s:Sc/Ascorer5/Component = "CarbonFilter"
s:Sc/Ascorer5/Surface="CarbonFilter/ZPlusSurface"
sv:Sc/Ascorer5/OnlyIncludeParticlesNamed = 1 "gamma"
s:Sc/Ascorer5/OutputType = "binary"
b:Sc/Ascorer5/OutputToConsole= "False"
s:Sc/Ascorer5/IfOutputFileAlreadyExists="Overwrite"

s:Sc/Ascorer6/Quantity="EnergyDeposit"
s:Sc/Ascorer6/Component = "Detector"
sv:Sc/Ascorer6/OnlyIncludeParticlesNamed = 1 "gamma"
s:Sc/Ascorer6/OutputType = "csv"
b:Sc/Ascorer6/OutputToConsole= "True"
s:Sc/Ascorer6/IfOutputFileAlreadyExists="Overwrite"
sv:Sc/Ascorer6/Report = 2 "Sum" "Mean"

s:Sc/Ascorer7/Quantity="SurfaceTrackCount"
s:Sc/Ascorer7/Component = "AMFPI"
s:Sc/Ascorer7/Surface="AMFPI/ZPlusSurface"
sv:Sc/Ascorer7/OnlyIncludeParticlesNamed = 1 "opticalphoton"
s:Sc/Ascorer7/OutputType = "binary"
b:Sc/Ascorer7/OutputToConsole= "False"
s:Sc/Ascorer7/IfOutputFileAlreadyExists="Overwrite"
i:Sc/Ascorer7/XBins    = 11
i:Sc/Ascorer7/YBins    = 11
sv:Sc/Ascorer7/Report = 1 "Standard_Deviation"

s:So/XRay/Type="Beam"
# s:GE/XRay/Parent="World"
s:So/XRay/BeamParticle="gamma"
s:So/XRay/BeamPositionCutoffShape= "Ellipse"
i:So/XRay/NumberOfHistoriesInRun= 10000000 #1 #1000000 #1000000
s:So/XRay/Component="BeamPosition"
s:So/XRay/BeamXYDistribution="None"
s:So/XRay/BeamAngularDistribution="None"
s:So/XRay/BeamPositionDistribution="None"
d:Ge/BeamPosition/DisplaceZ = Ge/CarbonFilter/DisplaceZ + Ge/CarbonFilter/HLZ mm
d:Ge/BeamPosition/TransZ = 1 mm + Ge/BeamPosition/DisplaceZ
sc:Ge/XRay/Color="red"