s:So/VolSource_background/Type                       = "Volumetric"
s:So/VolSource_background/Component                  = "Phantom"
sc:So/VolSource_background/ActiveMaterial            = "F18Solution"
s:So/VolSource_background/BeamParticle               = "e+"
ic:So/VolSource_background/NumberOfHistoriesInRun    = Tf/NumDecays_background/Value
b:So/VolSource_background/RecursivelyIncludeChildren = "False"
ic:So/VolSource_background/MaxNumberOfPointsToSample = 10000000
s:So/VolSource_background/BeamEnergySpectrumType     = "Continuous"
dv:So/VolSource_background/BeamEnergySpectrumValues  = So/VolSource_hot_0/BeamEnergySpectrumValues MeV
uv:So/VolSource_background/BeamEnergySpectrumWeights = So/VolSource_hot_0/BeamEnergySpectrumWeights

s:So/VolSource_hot_0/Type                            = "Volumetric"
s:So/VolSource_hot_0/Component                       = "Cylinder_hot_rod_0"
sc:So/VolSource_hot_0/ActiveMaterial                 = "F18Solution"
s:So/VolSource_hot_0/BeamParticle                    = "e+"
ic:So/VolSource_hot_0/NumberOfHistoriesInRun         = Tf/NumDecays_hot_0/Value
b:So/VolSource_hot_0/RecursivelyIncludeChildren      = "False"
s:So/VolSource_hot_0/BeamEnergySpectrumType          = "Continuous"
dv:So/VolSource_hot_0/BeamEnergySpectrumValues       = 1268 0.00025 0.00075 0.00125 0.00175 0.00225 0.00275 0.00325 0.00375 0.00425 0.00475 0.00525 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0.63375 MeV
uv:So/VolSource_hot_0/BeamEnergySpectrumWeights      = 1268 5.0000e-05 4.7200e-05 4.6400e-05 5.1900e-05 4.8200e-05 5.0900e-05 5.0300e-05 5.2900e-05 5.0400e-05 5.2300e-05 4.7500e-05 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2.0000e-07
     
s:So/VolSource_hot_1/Type                            = "Volumetric"
s:So/VolSource_hot_1/Component                       = "Cylinder_hot_rod_1"
sc:So/VolSource_hot_1/ActiveMaterial                 = "F18Solution"
s:So/VolSource_hot_1/BeamParticle                    = "e+"
ic:So/VolSource_hot_1/NumberOfHistoriesInRun         = Tf/NumDecays_hot_1/Value
b:So/VolSource_hot_1/RecursivelyIncludeChildren      = "False"
ic:So/VolSource_hot_1/MaxNumberOfPointsToSample      = 10000000
s:So/VolSource_hot_1/BeamEnergySpectrumType          = "Continuous"
dv:So/VolSource_hot_1/BeamEnergySpectrumValues       = So/VolSource_hot_0/BeamEnergySpectrumValues MeV
uv:So/VolSource_hot_1/BeamEnergySpectrumWeights      = So/VolSource_hot_0/BeamEnergySpectrumWeights
     
s:So/VolSource_hot_2/Type                            = "Volumetric"
s:So/VolSource_hot_2/Component                       = "Cylinder_hot_rod_2"
sc:So/VolSource_hot_2/ActiveMaterial                 = "F18Solution"
s:So/VolSource_hot_2/BeamParticle                    = "e+"
ic:So/VolSource_hot_2/NumberOfHistoriesInRun         = Tf/NumDecays_hot_2/Value
b:So/VolSource_hot_2/RecursivelyIncludeChildren      = "True"
s:So/VolSource_hot_2/BeamEnergySpectrumType          = "Continuous"
dv:So/VolSource_hot_2/BeamEnergySpectrumValues       = So/VolSource_hot_0/BeamEnergySpectrumValues MeV
uv:So/VolSource_hot_2/BeamEnergySpectrumWeights      = So/VolSource_hot_0/BeamEnergySpectrumWeights
     
s:So/VolSource_hot_3/Type                            = "Volumetric"
s:So/VolSource_hot_3/Component                       = "Cylinder_hot_rod_3"
sc:So/VolSource_hot_3/ActiveMaterial                 = "F18Solution"
s:So/VolSource_hot_3/BeamParticle                    = "e+"
ic:So/VolSource_hot_3/NumberOfHistoriesInRun         = Tf/NumDecays_hot_3/Value
b:So/VolSource_hot_3/RecursivelyIncludeChildren      = "False"
s:So/VolSource_hot_3/BeamEnergySpectrumType          = "Continuous"
dv:So/VolSource_hot_3/BeamEnergySpectrumValues       = So/VolSource_hot_0/BeamEnergySpectrumValues MeV
uv:So/VolSource_hot_3/BeamEnergySpectrumWeights      = So/VolSource_hot_0/BeamEnergySpectrumWeights
     