#================ Flat-penel detector ================
s:Ge/CBCTImager/Type     = "FlatImager"
s:Ge/CBCTImager/Material = "Nitrogen"
s:Ge/CBCTImager/Parent   = "World"
d:Ge/CBCTImager/TransZ   = -150 mm
#d:Ge/CBCTImager/HLX      = Ge/CBCTImager/Crystal/SizeTotalGap mm * Ge/CBCTImager/Crystal/NbOfXBins
#d:Ge/CBCTImager/HLY      = Ge/CBCTImager/Crystal/SizeTotalGap mm * Ge/CBCTImager/Crystal/NbOfYBins
#d:Ge/CBCTImager/HLZ      = Ge/CBCTImager/TotalThickness mm

#================ Crystal scintillator ================
s:Ge/CBCTImager/Crystal/Material           = "CsI"
s:Ge/CBCTImager/Crystal/Shape              = "Cylinder"
d:Ge/CBCTImager/Crystal/HL                 = 180 um
d:Ge/CBCTImager/Crystal/Radius             = 5.1 um
d:Ge/CBCTImager/Crystal/ReflectorThickness = 0 um
s:Ge/CBCTImager/Crystal/ReflectorMaterial  = "SiO2"
i:Ge/CBCTImager/Crystal/NbOfXBins          = 715
i:Ge/CBCTImager/Crystal/NbOfYBins          = 715
i:Ge/CBCTImager/Crystal/NbOfZBins          = 1
d:Ge/CBCTImager/Crystal/HXGap               = 0.9 um
d:Ge/CBCTImager/Crystal/HYGap               = 0.9 um
d:Ge/CBCTImager/Crystal/HZGap               = 0 mm
d:Ge/CBCTImager/Crystal/SizeTotal          = Ge/CBCTImager/Crystal/Radius + Ge/CBCTImager/Crystal/ReflectorThickness mm
d:Ge/CBCTImager/Crystal/SizeTotalGap       = Ge/CBCTImager/Crystal/SizeTotal + Ge/CBCTImager/Crystal/HXGap mm

#================ Prefilter ================
sv:Ge/CBCTImager/Prefilters/Materials   = 1 "Carbon"
dv:Ge/CBCTImager/Prefilters/Thicknesses = 1 100 um #100 um

#================ Anti-scatter grid ================
b:Ge/CBCTImager/Collimator/Exists                    = "False"
s:Ge/CBCTImager/Collimator/Material                  = "G4_W"
s:Ge/CBCTImager/Collimator/OpeningMaterial           = "Air"
d:Ge/CBCTImager/Collimator/HL                        = 100 mm
u:Ge/CBCTImager/Collimator/XSeptaThicknessPercentage = 0.2
u:Ge/CBCTImager/Collimator/YSeptaThicknessPercentage = 0.2
#u:Ge/CBCTImager/Collimator/ZSeptaThicknessPercentage = 0.2

#================ Photodetector ================
s:Ge/CBCTImager/PhotoDetector/Type      = "TsBox"
d:Ge/CBCTImager/PhotoDetector/HLZ       = 180 um
s:Ge/CBCTImager/PhotoDetector/Material  = "SiO2"


s:Ge/ScitillatorBox/Type       = "TsBox"
s:Ge/ScitillatorBox/Parent     = "World"
d:Ge/ScitillatorBox/HLX        = Ge/CBCTImager/Crystal/SizeTotalGap mm * Ge/CBCTImager/Crystal/NbOfXBins
d:Ge/ScitillatorBox/HLY        = Ge/CBCTImager/Crystal/SizeTotalGap mm * Ge/CBCTImager/Crystal/NbOfYBins
d:Ge/ScitillatorBox/HLZ        = Ge/CBCTImager/Crystal/HL mm
d:Ge/ScitillatorBox/TransZ     = Ge/CBCTImager/TransZ + 130 um # ((Collimator/HL+Crystal/HL+PhotoDetector/HLZ)*2+Prefilters/Thickness)/2-(Collimator/HL*2+Prefilters/Thickness+Crystal/HL)
s:Ge/ScitillatorBox/Color      = "Green"
b:Ge/ScitillatorBox/IsParallel = "True"

s:Ge/PhotdetBox/Type       = "TsBox"
s:Ge/PhotdetBox/Parent     = "World"
d:Ge/PhotdetBox/HLX        = Ge/ScitillatorBox/HLX mm
d:Ge/PhotdetBox/HLY        = Ge/ScitillatorBox/HLY mm
d:Ge/PhotdetBox/HLZ        = Ge/CBCTImager/PhotoDetector/HLZ mm
d:Ge/PhotdetBox/TransZ     = Ge/CBCTImager/TransZ - 230 um # ((Collimator/HL+Crystal/HL+PhotoDetector/HLZ)*2+Prefilters/Thickness)/2-(Collimator/HL*2+Prefilters/Thickness+Crystal/HL)
s:Ge/PhotdetBox/Color      = "Yellow"
b:Ge/PhotdetBox/IsParallel = "True"

