s:So/VolSource_background/Type                       = "Volumetric"
s:So/VolSource_background/Component                  = "Phantom"
sc:So/VolSource_background/ActiveMaterial            = "F18Solution"
s:So/VolSource_background/BeamParticle               = "e+"
b:So/VolSource_background/RecursivelyIncludeChildren = "False"
ic:So/VolSource_background/MaxNumberOfPointsToSample = 10000000
s:So/VolSource_background/BeamEnergySpectrumType     = "Continuous"
dv:So/VolSource_background/BeamEnergySpectrumValues  = 1268 0.00025 0.00075 0.00125 0.00175 0.00225 0.00275 0.00325 0.00375 0.00425 0.00475 0.00525 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0.63375 MeV
uv:So/VolSource_background/BeamEnergySpectrumWeights = 1268 5.0000e-05 4.7200e-05 4.6400e-05 5.1900e-05 4.8200e-05 5.0900e-05 5.0300e-05 5.2900e-05 5.0400e-05 5.2300e-05 4.7500e-05 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2.0000e-07

s:So/VolSource_hot_0/Type                            = "Volumetric"
s:So/VolSource_hot_0/Component                       = "Cylinder_hot_rod_0"
sc:So/VolSource_hot_0/ActiveMaterial                 = "F18Solution"
s:So/VolSource_hot_0/BeamParticle                    = "e+"
b:So/VolSource_hot_0/RecursivelyIncludeChildren      = "False"
s:So/VolSource_hot_0/BeamEnergySpectrumType          = "Continuous"
dv:So/VolSource_hot_0/BeamEnergySpectrumValues       = So/VolSource_background/BeamEnergySpectrumValues MeV
uv:So/VolSource_hot_0/BeamEnergySpectrumWeights      = So/VolSource_background/BeamEnergySpectrumWeights
     
s:So/VolSource_hot_1/Type                            = "Volumetric"
s:So/VolSource_hot_1/Component                       = "Cylinder_hot_rod_1"
sc:So/VolSource_hot_1/ActiveMaterial                 = "F18Solution"
s:So/VolSource_hot_1/BeamParticle                    = "e+"
b:So/VolSource_hot_1/RecursivelyIncludeChildren      = "False"
ic:So/VolSource_hot_1/MaxNumberOfPointsToSample      = 10000000
s:So/VolSource_hot_1/BeamEnergySpectrumType          = "Continuous"
dv:So/VolSource_hot_1/BeamEnergySpectrumValues       = So/VolSource_background/BeamEnergySpectrumValues MeV
uv:So/VolSource_hot_1/BeamEnergySpectrumWeights      = So/VolSource_background/BeamEnergySpectrumWeights
     
s:So/VolSource_hot_2/Type                            = "Volumetric"
s:So/VolSource_hot_2/Component                       = "Cylinder_hot_rod_2"
sc:So/VolSource_hot_2/ActiveMaterial                 = "F18Solution"
s:So/VolSource_hot_2/BeamParticle                    = "e+"
b:So/VolSource_hot_2/RecursivelyIncludeChildren      = "True"
s:So/VolSource_hot_2/BeamEnergySpectrumType          = "Continuous"
dv:So/VolSource_hot_2/BeamEnergySpectrumValues       = So/VolSource_background/BeamEnergySpectrumValues MeV
uv:So/VolSource_hot_2/BeamEnergySpectrumWeights      = So/VolSource_background/BeamEnergySpectrumWeights
     
s:So/VolSource_hot_3/Type                            = "Volumetric"
s:So/VolSource_hot_3/Component                       = "Cylinder_hot_rod_3"
sc:So/VolSource_hot_3/ActiveMaterial                 = "F18Solution"
s:So/VolSource_hot_3/BeamParticle                    = "e+"
b:So/VolSource_hot_3/RecursivelyIncludeChildren      = "False"
s:So/VolSource_hot_3/BeamEnergySpectrumType          = "Continuous"
dv:So/VolSource_hot_3/BeamEnergySpectrumValues       = So/VolSource_background/BeamEnergySpectrumValues MeV
uv:So/VolSource_hot_3/BeamEnergySpectrumWeights      = So/VolSource_background/BeamEnergySpectrumWeights
     